s:Sc/HistogramaDose1/Quantity 					= "DoseToMedium"
s:Sc/HistogramaDose1/Component 					= "Microtitulacao"
s:Sc/HistogramaDose1/OutputFile                	= "Output/histdose/HistogramaDose1"
s:Sc/HistogramaDose1/OutputType                	= "csv"
s:Sc/HistogramaDose1/IfOutputFileAlreadyExists 	= "Increment" #Exit, overwrite ou Increment
b:Sc/HistogramaDose1/OutputToConsole 			= "True"
sv:Sc/HistogramaDose1/Report                   	= 2 "Sum" "CumulativeVolumeHistogram"
i:Sc/HistogramaDose1/HistogramBins             	= 100
d:Sc/HistogramaDose1/HistogramMin              	= 0. Gy
d:Sc/HistogramaDose1/HistogramMax              	= .1 Gy
b:Sc/HistogramaDose1/PropagateToChildren 		= "True"

s:Sc/HistogramaDose2/Quantity 					= "DoseToMedium"
s:Sc/HistogramaDose2/Component 					= "2Microtitulacao"
s:Sc/HistogramaDose2/OutputFile                	= "Output/histdose/HistogramaDose2"
s:Sc/HistogramaDose2/OutputType                	= "csv"
s:Sc/HistogramaDose2/IfOutputFileAlreadyExists 	= "Increment" #Exit, overwrite ou Increment
b:Sc/HistogramaDose2/OutputToConsole 			= "True"
sv:Sc/HistogramaDose2/Report                   	= 2 "Sum" "CumulativeVolumeHistogram"
i:Sc/HistogramaDose2/HistogramBins             	= 100
d:Sc/HistogramaDose2/HistogramMin              	= 0. Gy
d:Sc/HistogramaDose2/HistogramMax               = .1 Gy
b:Sc/HistogramaDose2/PropagateToChildren 		= "True"

s:Sc/HistogramaDose3/Quantity 					= "DoseToMedium"
s:Sc/HistogramaDose3/Component 					= "3Microtitulacao"
s:Sc/HistogramaDose3/OutputFile                	= "Output/histdose/HistogramaDose3"
s:Sc/HistogramaDose3/OutputType                	= "csv"
s:Sc/HistogramaDose3/IfOutputFileAlreadyExists 	= "Increment" #Exit, overwrite ou Increment
b:Sc/HistogramaDose3/OutputToConsole 			= "True"
sv:Sc/HistogramaDose3/Report                    = 2 "Sum" "CumulativeVolumeHistogram"
i:Sc/HistogramaDose3/HistogramBins             	= 100
d:Sc/HistogramaDose3/HistogramMin         		= 0. Gy
d:Sc/HistogramaDose3/HistogramMax          		= .1 Gy
b:Sc/HistogramaDose3/PropagateToChildren 		= "True"

s:Sc/HistogramaDose4/Quantity 					= "DoseToMedium"
s:Sc/HistogramaDose4/Component 					= "4Microtitulacao"
s:Sc/HistogramaDose4/OutputFile                	= "Output/histdose/HistogramaDose4"
s:Sc/HistogramaDose4/OutputType                	= "csv"
s:Sc/HistogramaDose4/IfOutputFileAlreadyExists 	= "Increment" #Exit, overwrite ou Increment
b:Sc/HistogramaDose4/OutputToConsole 			= "True"
sv:Sc/HistogramaDose4/Report              		= 2 "Sum" "CumulativeVolumeHistogram"
i:Sc/HistogramaDose4/HistogramBins         		= 100
d:Sc/HistogramaDose4/HistogramMin          		= 0. Gy
d:Sc/HistogramaDose4/HistogramMax          		= .1 Gy
b:Sc/HistogramaDose4/PropagateToChildren 		= "True"

s:Sc/HistogramaDose11/Quantity 					= "DoseToMedium"
s:Sc/HistogramaDose11/Component 				= "11Microtitulacao"
s:Sc/HistogramaDose11/OutputFile               	= "Output/histdose/HistogramaDose11"
s:Sc/HistogramaDose11/OutputType               	= "csv"
s:Sc/HistogramaDose11/IfOutputFileAlreadyExists	= "Increment" #Exit, overwrite ou Increment
b:Sc/HistogramaDose11/OutputToConsole 			= "True"
sv:Sc/HistogramaDose11/Report          			= 2 "Sum" "CumulativeVolumeHistogram"
i:Sc/HistogramaDose11/HistogramBins    			= 100
d:Sc/HistogramaDose11/HistogramMin     			= 0. Gy
d:Sc/HistogramaDose11/HistogramMax     			= .1 Gy
b:Sc/HistogramaDose11/PropagateToChildren 		= "True"

s:Sc/HistogramaDose12/Quantity 					= "DoseToMedium"
s:Sc/HistogramaDose12/Component 				= "12Microtitulacao"
s:Sc/HistogramaDose12/OutputFile               	= "Output/histdose/HistogramaDose12"
s:Sc/HistogramaDose12/OutputType               	= "csv"
s:Sc/HistogramaDose12/IfOutputFileAlreadyExists	= "Increment" #Exit, overwrite ou Increment
b:Sc/HistogramaDose12/OutputToConsole 			= "True"
sv:Sc/HistogramaDose12/Report         			= 2 "Sum" "CumulativeVolumeHistogram"
i:Sc/HistogramaDose12/HistogramBins    			= 100
d:Sc/HistogramaDose12/HistogramMin     			= 0. Gy
d:Sc/HistogramaDose12/HistogramMax     			= .1 Gy
b:Sc/HistogramaDose12/PropagateToChildren 		= "True"

s:Sc/HistogramaDose13/Quantity 					= "DoseToMedium"
s:Sc/HistogramaDose13/Component 				= "13Microtitulacao"
s:Sc/HistogramaDose13/OutputFile               	= "Output/histdose/HistogramaDose13"
s:Sc/HistogramaDose13/OutputType               	= "csv"
s:Sc/HistogramaDose13/IfOutputFileAlreadyExists	= "Increment" #Exit, overwrite ou Increment
b:Sc/HistogramaDose13/OutputToConsole 			= "True"
sv:Sc/HistogramaDose13/Report          			= 2 "Sum" "CumulativeVolumeHistogram"
i:Sc/HistogramaDose13/HistogramBins    			= 100
d:Sc/HistogramaDose13/HistogramMin     			= 0. Gy
d:Sc/HistogramaDose13/HistogramMax     			= .1 Gy
b:Sc/HistogramaDose13/PropagateToChildren 		= "True"

s:Sc/HistogramaDose14/Quantity 					= "DoseToMedium"
s:Sc/HistogramaDose14/Component 				= "14Microtitulacao"
s:Sc/HistogramaDose14/OutputFile               	= "Output/histdose/HistogramaDose14"
s:Sc/HistogramaDose14/OutputType               	= "csv"
s:Sc/HistogramaDose14/IfOutputFileAlreadyExists	= "Increment" #Exit, overwrite ou Increment
b:Sc/HistogramaDose14/OutputToConsole 			= "True"
sv:Sc/HistogramaDose14/Report          			= 2 "Sum" "CumulativeVolumeHistogram"
i:Sc/HistogramaDose14/HistogramBins    			= 100
d:Sc/HistogramaDose14/HistogramMin     			= 0. Gy
d:Sc/HistogramaDose14/HistogramMax     			= .1 Gy
b:Sc/HistogramaDose14/PropagateToChildren 		= "True"

s:Sc/HistogramaDose21/Quantity 					= "DoseToMedium"
s:Sc/HistogramaDose21/Component 				= "21Microtitulacao"
s:Sc/HistogramaDose21/OutputFile               	= "Output/histdose/HistogramaDose21"
s:Sc/HistogramaDose21/OutputType               	= "csv"
s:Sc/HistogramaDose21/IfOutputFileAlreadyExists	= "Increment" #Exit, overwrite ou Increment
b:Sc/HistogramaDose21/OutputToConsole 			= "True"
sv:Sc/HistogramaDose21/Report         			= 2 "Sum" "CumulativeVolumeHistogram"
i:Sc/HistogramaDose21/HistogramBins    			= 100
d:Sc/HistogramaDose21/HistogramMin     			= 0. Gy
d:Sc/HistogramaDose21/HistogramMax     			= .1 Gy
b:Sc/HistogramaDose21/PropagateToChildren 		= "True"

s:Sc/HistogramaDose22/Quantity 					= "DoseToMedium"
s:Sc/HistogramaDose22/Component 				= "22Microtitulacao"
s:Sc/HistogramaDose22/OutputFile               	= "Output/histdose/HistogramaDose22"
s:Sc/HistogramaDose22/OutputType               	= "csv"
s:Sc/HistogramaDose22/IfOutputFileAlreadyExists	= "Increment" #Exit, overwrite ou Increment
b:Sc/HistogramaDose22/OutputToConsole 			= "True"
sv:Sc/HistogramaDose22/Report          			= 2 "Sum" "CumulativeVolumeHistogram"
i:Sc/HistogramaDose22/HistogramBins    			= 100
d:Sc/HistogramaDose22/HistogramMin     			= 0. Gy
d:Sc/HistogramaDose22/HistogramMax     			= .1 Gy
b:Sc/HistogramaDose22/PropagateToChildren 		= "True"

s:Sc/HistogramaDose23/Quantity 					= "DoseToMedium"
s:Sc/HistogramaDose23/Component 				= "23Microtitulacao"
s:Sc/HistogramaDose23/OutputFile               	= "Output/histdose/HistogramaDose23"
s:Sc/HistogramaDose23/OutputType               	= "csv"
s:Sc/HistogramaDose23/IfOutputFileAlreadyExists	= "Increment" #Exit, overwrite ou Increment
b:Sc/HistogramaDose23/OutputToConsole 		    = "True"
sv:Sc/HistogramaDose23/Report          			= 2 "Sum" "CumulativeVolumeHistogram"
i:Sc/HistogramaDose23/HistogramBins    			= 100
d:Sc/HistogramaDose23/HistogramMin     			= 0. Gy
d:Sc/HistogramaDose23/HistogramMax     			= .1 Gy
b:Sc/HistogramaDose23/PropagateToChildren 		= "True"

s:Sc/HistogramaDose24/Quantity 					= "DoseToMedium"
s:Sc/HistogramaDose24/Component 				= "24Microtitulacao"
s:Sc/HistogramaDose24/OutputFile               	= "Output/histdose/HistogramaDose24"
s:Sc/HistogramaDose24/OutputType               	= "csv"
s:Sc/HistogramaDose24/IfOutputFileAlreadyExists	= "Increment" #Exit, overwrite ou Increment
b:Sc/HistogramaDose24/OutputToConsole 			= "True"
sv:Sc/HistogramaDose24/Report         			= 2 "Sum" "CumulativeVolumeHistogram"
i:Sc/HistogramaDose24/HistogramBins    			= 100
d:Sc/HistogramaDose24/HistogramMin     			= 0. Gy
d:Sc/HistogramaDose24/HistogramMax     			= .1 Gy
b:Sc/HistogramaDose24/PropagateToChildren 		= "True"

s:Sc/HistogramaDose31/Quantity 					= "DoseToMedium"
s:Sc/HistogramaDose31/Component 				= "31Microtitulacao"
s:Sc/HistogramaDose31/OutputFile               	= "Output/histdose/HistogramaDose31"
s:Sc/HistogramaDose31/OutputType               	= "csv"
s:Sc/HistogramaDose31/IfOutputFileAlreadyExists	= "Increment" #Exit, overwrite ou Increment
b:Sc/HistogramaDose31/OutputToConsole 			= "True"
sv:Sc/HistogramaDose31/Report          			= 2 "Sum" "CumulativeVolumeHistogram"
i:Sc/HistogramaDose31/HistogramBins    			= 100
d:Sc/HistogramaDose31/HistogramMin     			= 0. Gy
d:Sc/HistogramaDose31/HistogramMax     			= .1 Gy
b:Sc/HistogramaDose31/PropagateToChildren 		= "True"

s:Sc/HistogramaDose32/Quantity 					= "DoseToMedium"
s:Sc/HistogramaDose32/Component 				= "32Microtitulacao"
s:Sc/HistogramaDose32/OutputFile               	= "Output/histdose/HistogramaDose32"
s:Sc/HistogramaDose32/OutputType               	= "csv"
s:Sc/HistogramaDose32/IfOutputFileAlreadyExists	= "Increment" #Exit, overwrite ou Increment
b:Sc/HistogramaDose32/OutputToConsole 			= "True"
sv:Sc/HistogramaDose32/Report          			= 2 "Sum" "CumulativeVolumeHistogram"
i:Sc/HistogramaDose32/HistogramBins    			= 100
d:Sc/HistogramaDose32/HistogramMin     			= 0. Gy
d:Sc/HistogramaDose32/HistogramMax     			= .1 Gy
b:Sc/HistogramaDose32/PropagateToChildren 		= "True"

s:Sc/HistogramaDose33/Quantity 					= "DoseToMedium"
s:Sc/HistogramaDose33/Component 				= "33Microtitulacao"
s:Sc/HistogramaDose33/OutputFile               	= "Output/histdose/HistogramaDose33"
s:Sc/HistogramaDose33/OutputType               	= "csv"
s:Sc/HistogramaDose33/IfOutputFileAlreadyExists	= "Increment" #Exit, overwrite ou Increment
b:Sc/HistogramaDose33/OutputToConsole 			= "True"
sv:Sc/HistogramaDose33/Report          			= 2 "Sum" "CumulativeVolumeHistogram"
i:Sc/HistogramaDose33/HistogramBins     		= 100
d:Sc/HistogramaDose33/HistogramMin     			= 0. Gy
d:Sc/HistogramaDose33/HistogramMax     			= .1 Gy
b:Sc/HistogramaDose33/PropagateToChildren 		= "True"

s:Sc/HistogramaDose34/Quantity 					= "DoseToMedium"
s:Sc/HistogramaDose34/Component 				= "34Microtitulacao"
s:Sc/HistogramaDose34/OutputFile               	= "Output/histdose/HistogramaDose34"
s:Sc/HistogramaDose34/OutputType               	= "csv"
s:Sc/HistogramaDose34/IfOutputFileAlreadyExists	= "Increment" #Exit, overwrite ou Increment
b:Sc/HistogramaDose34/OutputToConsole 			= "True"
sv:Sc/HistogramaDose34/Report          			= 2 "Sum" "CumulativeVolumeHistogram"
i:Sc/HistogramaDose34/HistogramBins    			= 100
d:Sc/HistogramaDose34/HistogramMin     			= 0. Gy
d:Sc/HistogramaDose34/HistogramMax     			= .1 Gy
b:Sc/HistogramaDose34/PropagateToChildren 		= "True"
